PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1, 1, 1]
  expName = EmotionTask
  logging level = debug
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Routines
  Routine baseline
    TextComponent blankscreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        n = split_list[blocks.thisTrialN]
        print(n)
  Routine post
    TextComponent post_jittered_break
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rand_t
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    CodeComponent save_vars
      Code Type = Auto->JS
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      End Routine:
        loc_idx = loc_sub[trials.thisRepN];
        thisExp.addData('ImageFile', df_sm.ImageFile[loc_idx]);
        thisExp.addData('Category', df_sm.Category[loc_idx]);
        thisExp.addData('Num', df_sm.Num[loc_idx]);
        corr = 0;
        if len(key_resp.rt) > 0:
            if df_sm.Category[loc_idx] == 'house':
                corr = 1;
            else:
                corr = 0;
        else:
            if df_sm.Category[loc_idx] == 'house':
                corr = 0;
            else:
                corr = 1;
        thisExp.addData('CorrectButton', corr);
  Routine instructions
    TextComponent instructions_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press the space bar when you see a house.

        Click anywhere when ready.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        # remove this code block when settings is fixed

        # need pandas for dataframe functionality
        import pandas as pd
        # need serial for TTL generation
        import serial
        # excel file with image filenames and categories
        df_sm = pd.read_excel('stimuli.xlsx')
        # setup variables
        cats = df_sm.Category.unique();
        nums = list(range(len(cats)));
        ## calculate numtrls_tot and numruns options
        cz = len(df_sm.Num.unique());
        z = round(cz/len(cats));
        if cz != len(df_sm):
            print('Warning: more spreadsheet entries than unique image indices');
        numtrls_tot_opts = [cz*4, cz*8, cz*12, cz*16];
        numruns_opts = [z, z*2, z*4];
        # set defaults
        numruns = numruns_opts[1];
        numtrls_tot = numtrls_tot_opts[3];
        numtrls_per = round(numtrls_tot/numruns);
        # open serial port
        #ser = serial.Serial('/dev/tty.usbserial-AG0JFT5C', 19200, timeout = 1);
        #ser.dtr = False

        # randomly split stimuli for blocks with even representation of categories per block
        split_list = [[] for _ in list(range(numruns))] # empty list of lists, where each list will ultimately represent a block
        df = pd.concat([df_sm]*round(numtrls_tot/len(df_sm))); # repeat the dataframe so the number of trials is correct
        for x in nums: # for each category
            loc = cats[x];
            subs = df[df.Category.str.match(loc)]; # subset of data in this category
            numsubs = len(subs); # number of stimuli in this category
            div = round(numsubs/numruns) # number of stimuli in this category to be put in each block
            subsn = list(subs.index) # just get the image indices
            shuffle(subsn); # randomize order
            loclist = [subsn[div*i:div*(i+1)] for i in list(range(numruns))]; # split evenly in numruns lists with div values each
            for n in list(range(numruns)): # for each block, add these stimuli to the list
                split_list[n].extend(loclist[n])
        for n in list(range(numruns)): # after lists are constructed for each block, shuffle order of stimuli within each block
            shuffle(split_list[n]);
  Routine settings
    CodeComponent setup_imagedata
      Code Type = Auto->JS
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      Before Experiment:
        # need pandas for dataframe functionality
        import pandas as pd
        # need serial for TTL generation
        import serial
        # excel file with image filenames and categories
        df_sm = pd.read_excel('stimuli.xlsx')
        # setup variables
        cats = df_sm.Category.unique();
        nums = list(range(len(cats)));
        ## calculate numtrls_tot and numruns options
        cz = len(df_sm.Num.unique());
        z = round(cz/len(cats));
        if cz != len(df_sm):
            print('Warning: more spreadsheet entries than unique image indices');
        numtrls_tot_opts = [cz*4, cz*8, cz*12, cz*16];
        numruns_opts = [z, z*2, z*4];
        # set defaults
        numruns = numruns_opts[1];
        numtrls_tot = numtrls_tot_opts[3];
        numtrls_per = round(numtrls_tot/numruns);
        # open serial port
        #ser = serial.Serial('/dev/tty.usbserial-AG0JFT5C', 19200, timeout = 1);
        #ser.dtr = False
      Begin Routine:
        # set defaults
        tot_trials.markerPos = numtrls_tot;
        exp_blocks.markerPos = 2;
      Each Frame:
        # update numruns and numtrls based on input
        if exp_blocks.getRating() is not None:
            numruns = numruns_opts[int(exp_blocks.getRating())];
        if tot_trials.getRating() is not None:
            numtrls_tot = numtrls_tot_opts[int(tot_trials.getRating())];
            numtrls_per = int(numtrls_tot/numruns);
        #    numtrls_per = int(numtrls_tot/numruns);
      End Routine:
        # randomly split stimuli for blocks with even representation of categories per block
        split_list = [[] for _ in list(range(numruns))] # empty list of lists, where each list will ultimately represent a block
        df = pd.concat([df_sm]*round(numtrls_tot/len(df_sm))); # repeat the dataframe so the number of trials is correct
        for x in nums: # for each category
            loc = cats[x];
            subs = df[df.Category.str.match(loc)]; # subset of data in this category
            numsubs = len(subs); # number of stimuli in this category
            div = round(numsubs/numruns) # number of stimuli in this category to be put in each block
            subsn = list(subs.index) # just get the image indices
            shuffle(subsn); # randomize order
            loclist = [subsn[div*i:div*(i+1)] for i in list(range(numruns))]; # split evenly in numruns lists with div values each
            for n in list(range(numruns)): # for each block, add these stimuli to the list
                split_list[n].extend(loclist[n])
        for n in list(range(numruns)): # after lists are constructed for each block, shuffle order of stimuli within each block
            shuffle(split_list[n]);
    SliderComponent tot_trials
      color = black
      forceEndRoutine = False
      granularity = 1
      labels [set every repeat] = [str(numtrls_tot_opts[i]) for i in list(range(4))]
      pos = (0, 0.25)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = [0, 1, 2, 3]
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    SliderComponent exp_blocks
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = [str(numruns_opts[i]) for i in list(range(3))]
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = ['radio']
      ticks = [0, 1, 2]
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    TextComponent trl_label
      color = black
      letterHeight = 0.05
      pos = (0, .31)
      startVal [time (s)] = 0.0
      text = $'# of Trials (default ' + str(numtrls_tot_opts[3]) +')'
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    TextComponent block_label
      color = black
      letterHeight = 0.05
      pos = (0, 0.06)
      startVal [time (s)] = 0.0
      text = $'# of Blocks (default ' + str(numruns_opts[1]) + ')'
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    TextComponent report_label
      color = black
      letterHeight = 0.05
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $str(numtrls_tot) + ' total trials split among ' + str(numruns) + ' blocks for ' + str(numtrls_per) + ' trials per block.'
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    TextComponent done
      color = red
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = DONE
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    MouseComponent done_click
      clickable = done
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine pre
    CodeComponent calc_loopvars
      Code Type = Auto->JS
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      Begin Routine:
        rand_t = (random()*0.2)+1.4;
        loc_sub = split_list[blocks.thisRepN];
    ImageComponent fix_cross
      image = Images/fix_cross.png
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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  Routine test
    ImageComponent image
      image [set every repeat] = $df_sm.ImageFile[loc_sub[trials.thisRepN]]
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      store = all keys
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        #ser.dtr = True
      End Routine:
        #ser.dtr = False
  Routine block_completed
    TextComponent completed_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Completed block ' + str(blocks.thisRepN + 1) + ' out of ' + str(numruns) + '. Click anywhere to continue.'
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    MouseComponent cont
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine overall_completed
    TextComponent complete_and_exit
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thank you, you have finished the task!
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Flow
  Routine instructions
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = numruns
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = numtrls_per
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      Routine pre
      Routine test
      Routine post
    LoopTerminator trials
    Routine block_completed
  LoopTerminator blocks
  Routine overall_completed
