PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1, 1, 1]
  expName = FlankerTask
  logging level = debug
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Routines
  Routine instructions
    TextComponent instr
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Press the right button if the middle fish is pointing right and the left button if the middle fish is pointing left.

        (click anywhere to continue)
    MouseComponent cont_instr
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine practice_go
    TextComponent prac_go_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $prac_msg
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    MouseComponent cont_prac
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine fix
    ImageComponent image
      image = Images/fix_cross.png
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.19
      texture resolution = 512
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  Routine blank_pre
    TextComponent blank1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .04
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  Routine blank_post
    TextComponent blank3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.64
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  Routine stimulus_pres
    CodeComponent calc
      Code Type = Auto->JS
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      Begin Experiment:
        run_ord = [[] for _ in list(range(numruns))]
        for ii in list(range(numruns)):
            loc_ord_n = [[stim_nums[i]]*round(block_rat[ii][i]*numtrls_per) for i in list(range(4))];
            loc_ord = [];
            for sublist in loc_ord_n:
                for item in sublist:
                    loc_ord.append(item)
            shuffle(loc_ord);
            run_ord[ii] = loc_ord;
      Begin Routine:
        trl_num = run_ord[blocks.thisRepN][trials.thisRepN];
        if trl_num < 2:
            corans = 'right';
        else:
            corans = 'left';
      End Routine:
        if not key_resp.keys:
            fnum = 0;
        elif key_resp.corr:
            fnum = 1;
        else:
            fnum = 0;
    ImageComponent stimulus
      image [set every repeat] = $'Images/' + stim_names[trl_num] + '.jpg'
      size = (1, 0.23)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_lens[fs]
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'left', 'right'
      correctAns = $corans
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_lens[fs] + resp_lens[fs]
      store = first key
      storeCorrect = True
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    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine response_window
    KeyboardComponent key_resp2
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $resp_lens[fs]
      store = first key
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        keypress.append(key_resp2.waitKeys);
        print(keypress)
  Routine blank_post_2
    TextComponent blank4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.09
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  Routine feedback
    ImageComponent feedback_image
      image [set every repeat] = $'Images/' + feedback_names[fnum] + '.jpg'
      size = (1, 0.23)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_times[fnum]
      texture resolution = 512
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  Routine dummy_calc
    CodeComponent continue_tf
      Code Type = Auto->JS
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      End Routine:
        incorr = prac_trls- prac_correct;
        if incorr <= fast_thresh:
            fs = 1;
            practice_rep.finished = True;
        elif incorr <= prac_thresh:
            fs = 0;
            practice_rep.finished = True;
        else:
            prac_msg = 'We will try practicing a little more. (click anywhere to continue)'
  Routine go
    TextComponent go_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Great job! You'e ready to start!

        (click anywhere to continue)
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine block_end
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Congratulations, you finished block ' + str(blocks.thisRepN + 1) + ' out of ' + str(numruns) + '! Click anywhere to continue.'
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    MouseComponent cont_blk
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine stimulus_pres_prac
    CodeComponent prac_calc
      Code Type = Auto->JS
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      Begin Experiment:
        prac_ord_n = [[stim_nums[i]]*round(prac_rat[i]*prac_trls) for i in list(range(4))];
        prac_ord = [];
        for sublist in prac_ord_n:
            for item in sublist:
                prac_ord.append(item)
        shuffle(prac_ord);
      Begin Routine:
        trl_num = prac_ord[practice.thisRepN];
        if trl_num < 2:
            corans = 'right';
        else:
            corans = 'left';
      End Routine:
        if not prac_key_resp.keys:
            fnum = 0;
        elif prac_key_resp.corr:
            fnum = 1;
        else:
            fnum = 0;
        prac_correct = prac_correct + fnum;
    ImageComponent prac_stimulus
      image [set every repeat] = $'Images/' + stim_names[trl_num] + '.jpg'
      size = (1, 0.23)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_lens[fs]
      texture resolution = 512
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    KeyboardComponent prac_key_resp
      allowedKeys = 'left', 'right'
      correctAns = $corans
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_lens[fs] + resp_lens[fs]
      store = first key
      storeCorrect = True
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine thank_you
    TextComponent final_txt
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = You are done! Thank you for participating. Press esc to exit.
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  Routine settings
    TextComponent settings_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $'Number of practice trials: ' + str(prac_trls) + '\n' + str(prac_thresh) + ' or fewer incorrect trials needed to pass practice (.3/.6s stim/resp), ' + str(fast_thresh) + ' or fewer incorrect trials to use faster times (.25/.5s stim/resp).\n\n' + str(numruns) + ' blocks of ' + str(numtrls_per) + ' trials each.\nProportion of congruent trials per block are (in order): ' + str([item[0]*2 for item in block_rat]) + ', split evenly between left and right.\n\nClick anywhere to continue or adjust in settings > setup > Before Experiment.'
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    CodeComponent setup
      Code Type = Auto->JS
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      Before Experiment:
        # practice variables
        prac_rat = [0.25, 0.25, 0.25, 0.25]; # ratio of RC:RI:LC:LI during practice
        prac_trls = 24; # number of practice trials
        prac_thresh = 11; # most incorrect trials needed to pass (slow)
        fast_thresh = 4; # most incorrect trials needed to pass (fast)
        prac_correct = 0; # counter, do not reset
        prac_msg = 'Are you ready to practice? (click anywhere to continue)'

        # block variables
        numtrls_per = 50; # trials per blocks
        numruns = 4; # blocks
        # ratio of RC:RI:LC:LI during successive blocks (currently hard-coded for 4 blocks)
        block_rat = [[0.4, 0.1, 0.4, 0.1], [0.3, 0.2, 0.3, 0.2], [0.2, 0.3, 0.2, 0.3], [0.1, 0.4, 0.1, 0.4]];

        # stimuli
        stim_nums = [0, 1, 2, 3]; #[RC,RI,LC,LI]
        # filenames
        stim_names = ['Flanker_white_congruent_right', 'Flanker_white_incongruent_right', 'Flanker_white_congruent_left', 'Flanker_white_incongruent_left'];

        # feedback
        #filenames
        feedback_names = ['Incorrect_Frowny', 'Correct_Smiley'];
        feedback_times = [0.69, 1]; #[incorrect, correct[
        fnum = 0; # dummy

        # slow or fast
        stim_lens = [0.25, 0.3]; # fast/slow stimulus presentation times
        resp_lens = [0.5, 0.6]; # fast/slow response times
        fs = 1; # 0 for fast, 1 for slow
    MouseComponent cont_settings
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine settings
  Routine instructions
  LoopInitiator practice_rep loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 999
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    Routine practice_go
    LoopInitiator practice loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = $prac_trls
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      Routine fix
      Routine blank_pre
      Routine stimulus_pres_prac
      Routine blank_post
      Routine feedback
      Routine blank_post_2
    LoopTerminator practice
    Routine dummy_calc
  LoopTerminator practice_rep
  Routine go
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = $numruns
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = $numtrls_per
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      Routine fix
      Routine blank_pre
      Routine stimulus_pres
      Routine blank_post
      Routine feedback
      Routine blank_post_2
    LoopTerminator trials
    Routine block_end
  LoopTerminator blocks
  Routine thank_you
